PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1800, 1169]
  expName = CoSpeechGestures
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine NoGoTrial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        Any text

        including line breaks
  Routine goodbyeScreen
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    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        This is the end of the experiment.

        Thank you for your time!
  Routine welcomeScreen
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    CodeComponent codeStart
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core
        import pandas as pd
        import numpy as np
        import random
        from PIL import Image  # Python Imaging Library (included with PsychoPy)
        import nidaqmx

        # Try to open a small non-fullscreen window for the experimenter
        #try:
        #    expWin = visual.Window(
        #        size=(400, 200),
        #        screen=2,          # 0 = primary display (change if needed)
        #        fullscr=False,
        #        color='grey',
        #        units='pix'
        #    )
        #    expWinOK = True
        #except Exception as e:
         #   print(f"⚠️ Could not open experimenter window: {e}")
          #  expWinOK = False

        ## specify output port for trigger
        trigger_task = nidaqmx.Task()
        trigger_task.do_channels.add_do_chan("Dev1/port0/line0")

        ## trigger function
        def send_trigger():
            trigger_task.write(True)
            core.wait(0.002)  # 2 milliseconds
            trigger_task.write(False)

        ## specifiy current Block number
        nBlock = 0

        ## load stimuli
        # load go trials
        go_trials = pd.read_excel('stimuli_go.xlsx')

        # repeat go trials 3 times
        go_trials_rep = pd.concat([go_trials]*3, ignore_index = True)

        # load nogo trials
        nogo_trials = pd.read_excel('stimuli_no.xlsx')
        subset_nogo_trials = nogo_trials.sample(n=7).reset_index(drop=True)  # select 5 random rows

        # Combine Go and NoGo trials
        all_trials = pd.concat([go_trials_rep, subset_nogo_trials], ignore_index = True)

        # shuffle
        all_trials = all_trials.sample(frac=1).reset_index(drop=True)

        # temporary csv
        all_trials.to_csv("current_block_trials.csv", index = False)

        # choose subset from go-trials for training block
        # we want to show each gesture once during training, choose instruciton type randomly

        # choose subset in go_trials
        samples = []
        for i in range(0, len(go_trials), 3):
            block = go_trials.iloc[i:i+3]  # block of 3 rows of excel
            if len(block) > 0:
                chosen = block.sample(n=1)  # random instruction
                samples.append(chosen)

        # 12 Samples
        samples = pd.concat(samples).head(12)
        nogo_sample = nogo_trials.sample(n=1).reset_index(drop=True)
        trainingTrials = pd.concat([samples, nogo_sample], ignore_index = True)
        trainingTrials.to_csv('trainingTrials.csv', index = False)

        # adjust video size to screen window size
        screen_width = win.size[0]
        screen_height = win.size[1]

        print("Screen window size: ", screen_width, screen_height)

        video_width = int(screen_height * 0.8 * (16/9))
        video_height = int(screen_height * 0.8)
        sizeVideo = [video_width, video_height]
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        If you want to continue to the explanation of this task, please press SPACEBAR.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine explanationScreen
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    TextComponent textExplanation
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, each trial will begin with a word played over the speakers, accompanied by a video showing a gesture on the
        screen in front of you.

        After this, you’ll be asked to do one of the following - repeat the word, perform the gesture, or do both at the same time — depending on the trial.

        You’ll know when to respond by a GO cue, which will appear as a green circle. If instead a red circle appears, it’s a No-Go trial - in that case, simply relax and do nothing.

        Please attempt to perform the gesture with only your right hand to the best of your abilities. Even if you cannot physically produce the gesture, please give it your best try.

        Press SPACEBAR to continue.
    KeyboardComponent keyExplanationResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expInstructSpeak
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    TextComponent textInstructSpeak
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = The shown symbol is the image you will see when you are asked to repeat the word.
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    ImageComponent imageSpeak
      image = images/speak.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent textInstructSpeak_continue
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue.
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    KeyboardComponent keyInstructSpeak_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expInstructHand
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    TextComponent textInstructHand
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = The shown symbol is the image you will see when you are asked to repeat the gesture.
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    KeyboardComponent keyInstructHand_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textInstructHand_continue
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue.
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    ImageComponent imageInstructHand
      image = images/hand.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine expInstructBoth
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    CodeComponent codeImageBoth
      Code Type = Auto->JS
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      Begin Routine:
        # Load the image to get its size
        img = Image.open('images/speak_gesture.png')
        width, height = img.size

        # Convert pixel dimensions to PsychoPy units (assuming your window uses 'pix')
        aspect = width / height

        # Set the image size dynamically
        # E.g., fix the height and adjust width to preserve aspect ratio:
        fixed_height = 0.4
        sizeImageDemo = [fixed_height * aspect, fixed_height]
    TextComponent textInstructBoth
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = The shown symbol is the image you will see when you are asked to repeat the word and the gesture simultaneously. 
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    ImageComponent imageInstructBoth
      image = images/speak_gesture.png
      size [set every repeat] = sizeImageDemo
      startVal [time (s)] = 0.0
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    KeyboardComponent keyresponseInstructBoth
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textInstructBoth_continue
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue.
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  Routine trials
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import event
      Begin Routine:
        # different action display for GO/No-GO conditions
        if action == "go":
            circle_color = 'green'
        elif action == 'nogo':
            circle_color = 'red'
        else:
            circle_color = 'black'


        ## select image dimension for instruction image

        # Load the image to get its size
        img = Image.open(instructionSymbol)
        width, height = img.size

        # Convert pixel dimensions to PsychoPy units (assuming your window uses 'pix')
        aspect = width / height

        # Set the image size dynamically
        # E.g., fix the height and adjust width to preserve aspect ratio:
        fixed_height = 0.4
        thisExp.addData('image_aspect', aspect)
        sizeImage = [fixed_height * aspect, fixed_height]


        # check for keypress pause
        keys = event.getKeys(keyList=['p'])

        # if p was pressed, set a flag to run the routine
        run_routine = 'p' in keys
        print("Pausing in next trial: ", run_routine)

        if run_routine:
            nPause = 1
        else:
            nPause = 0

        # increase trialNumber
        trialN += 1
        print(trialN)

        if trialN == nHalfTime:
            repHalftime = 1
    PolygonComponent iti
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
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    TextComponent trialStart
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 2
      stopVal [time (s)] = 3
      text = START
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    MovieComponent movieGesture
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stimVideo
      size = $sizeVideo
      startVal [time (s)] = 3.0
      stopVal [time (s)] = 6.0
      units = pix
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    SoundComponent soundStimulus
      forceEndRoutine = False
      sound [set every repeat] = $stimAudio
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2.0
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    ImageComponent instructionImage
      image [set every repeat] = $instructionSymbol
      size [set every repeat] = sizeImage
      startVal [time (s)] = 6
      stopVal [time (s)] = 8.5
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    PolygonComponent actionCue
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 8.5
      stopVal [time (s)] = 11
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    SoundComponent audioGoCue
      forceEndRoutine = False
      sound [set every repeat] = audios/race-start-beeps-125125.mp3
      startVal [time (s)] = 8.5
      stopVal [time (s)] = 9.5
      volume = 0.8
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  Routine trainingTrials
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    CodeComponent codeTraining
      Code Type = Auto->JS
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      Begin Routine:
        # different action display for GO/No-GO conditions
        if action == "go":
            circle_color = 'green'
        elif action == 'nogo':
            circle_color = 'red'
        else:
            circle_color = 'black'


        ## select image dimension for instruction image

        # Load the image to get its size
        img = Image.open(instructionSymbol)
        width, height = img.size

        # Convert pixel dimensions to PsychoPy units (assuming your window uses 'pix')
        aspect = width / height

        # Set the image size dynamically
        # E.g., fix the height and adjust width to preserve aspect ratio:
        fixed_height = 0.4
        thisExp.addData('image_aspect', aspect)
        sizeImage = [fixed_height * aspect, fixed_height]

        # DO the same with the
    PolygonComponent itiTraining
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
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    TextComponent trialStart_Training
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 2
      stopVal [time (s)] = 3
      text = START
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    MovieComponent movieGesture_Training
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stimVideo
      size = sizeVideo
      startVal [time (s)] = 3.0
      stopVal [time (s)] = 6.0
      units = pix
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    SoundComponent soundStimulus_Training
      forceEndRoutine = False
      sound [set every repeat] = $stimAudio
      startVal [time (s)] = 3.5
      stopVal [time (s)] = 6
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    ImageComponent instructionImageTraining
      image [set every repeat] = $instructionSymbol
      size [set every repeat] = sizeImage
      startVal [time (s)] = 6
      stopVal [time (s)] = 8.5
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    PolygonComponent actionCueTraining
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 8.5
      stopVal [time (s)] = 11
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    SoundComponent soundGoCue_Training
      forceEndRoutine = False
      sound [set every repeat] = audios/race-start-beeps-125125.wav
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 1.0
      volume = 0.8
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  Routine trainingBlock
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    TextComponent textBlockTraining
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the beginning of the training. If you want to start, please press SPACEBAR.
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    KeyboardComponent keyBlockResponseTraining
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine paused
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    CodeComponent codePause
      Code Type = Auto->JS
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      Begin Routine:
        keys = event.getKeys(keyList = ['p'])

        if 'p' in keys:
            event.clearEvents()
    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Experiment is paused.

        To continue the experiment, press 'SPACEBAR'.
    KeyboardComponent keyRespPause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine halfTime
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    CodeComponent codeHalftime
      Code Type = Auto->JS
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      Begin Routine:
        # reset to default
        repHalftime = 0
    TextComponent textHalfTime
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        You are halfway through this block!

        The experiment continues in 30 seconds.
  Routine blockTrials
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    CodeComponent codeBlockPartOne
      Code Type = Auto->JS
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      Begin Routine:
        #choose new,random subset of nogo trials
        subset_nogo_trials = nogo_trials.sample(n=7).reset_index(drop=True)  # select 7 random rows

        # new all_trials array for the next block
        all_trials = pd.concat([go_trials_rep, subset_nogo_trials], ignore_index = True)

        # re-shuffle at the beginning of each block
        all_trials = all_trials.sample(frac=1).reset_index(drop=True)

        # temporary csv for this block
        #all_trials.to_csv('block_trials.csv', index = False)
        nBlock += 1
        all_trials.to_csv(f"blocks/block_trials{nBlock}.csv", index = False)
        all_trials.to_csv("current_block_trials.csv", index = False)

        # set trial number to 0
        trialN = 0
        nHalfTime = 59
        repHalftime = 0
    TextComponent textBlockOne
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the beginning of a new block. If you want to start, please press SPACEBAR.
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    KeyboardComponent keyBlockResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcomeScreen
  Routine explanationScreen
  Routine expInstructSpeak
  Routine expInstructHand
  Routine expInstructBoth
  LoopInitiator trainingTrials_block loopType="TrialHandler"
    conditionsFile = trainingTrials.csv
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('instructionType', 'gesture'), ('instructionSymbol', 'images/hand.png'), ('action', 'go'), ('stimText', '"cutting"'), ('stimAudio', 'audios/cutting.wav'), ('stimVideo', 'videos/cutting_clip.mp4'), ('movement', 'arm')]),
      OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"sweeping"'), ('stimAudio', 'audios/sweeping.wav'), ('stimVideo', 'videos/sweeping_clip.mp4'), ('movement', 'arm')]),
      OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"outside"'), ('stimAudio', 'audios/outside.wav'), ('stimVideo', 'videos/outside_clip.mp4'), ('movement', 'arm')]),
      OrderedDict([('instructionType', 'gesture'), ('instructionSymbol', 'images/hand.png'), ('action', 'go'), ('stimText', '"what"'), ('stimAudio', 'audios/what.wav'), ('stimVideo', 'videos/what_clip.mp4'), ('movement', 'wrist')]),
      OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"goodbye"'), ('stimAudio', 'audios/goodbye.wav'), ('stimVideo', 'videos/goodbye_clip.mp4'), ('movement', 'wrist')]),
      OrderedDict([('instructionType', 'speech_gesture'), ('instructionSymbol', 'images/speak_gesture.png'), ('action', 'go'), ('stimText', '"stop"'), ('stimAudio', 'audios/stop2.wav'), ('stimVideo', 'videos/stop_clip.mp4'), ('movement', 'wrist')])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
    Routine trainingBlock
    Routine trainingTrials
  LoopTerminator trainingTrials_block
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    conditions:
      [{'conditions': 'speech_go', 'action': 'go'},
      {'conditions': 'gesture_go', 'action': 'go'},
      {'conditions': 'speech_gesture_go', 'action': 'go'},
      {'conditions': 'speech_no', 'action': 'nogo'},
      {'conditions': 'gesture_no', 'action': 'nogo'},
      {'conditions': 'speech_gesture_no', 'action': 'nogo'}]
    Routine blockTrials
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = current_block_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('instructionType', 'gesture'), ('instructionSymbol', 'images/hand.png'), ('action', 'go'), ('stimText', '"what"'), ('stimAudio', 'audios/what.wav'), ('stimVideo', 'videos/what_clip.mp4'), ('movement', 'wrist')]),
        OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"goodbye"'), ('stimAudio', 'audios/goodbye.wav'), ('stimVideo', 'videos/goodbye_clip.mp4'), ('movement', 'wrist')]),
        OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"good luck"'), ('stimAudio', 'audios/goodluck2.wav'), ('stimVideo', 'videos/goodluck_clip.mp4'), ('movement', 'digits')]),
        OrderedDict([('instructionType', 'speech_gesture'), ('instructionSymbol', 'images/speak_gesture.png'), ('action', 'go'), ('stimText', '"peace"'), ('stimAudio', 'audios/peace.wav'), ('stimVideo', 'videos/peace_clip.mp4'), ('movement', 'digits')]),
        OrderedDict([('instructionType', 'speech_no'), ('instructionSymbol', 'images/speak.png'), ('action', 'nogo'), ('stimText', '"good luck"'), ('stimAudio', 'audios/goodluck2.wav'), ('stimVideo', 'videos/goodluck_clip.mp4'), ('movement', 'digits')]),
        OrderedDict([('instructionType', 'gesture'), ('instructionSymbol', 'images/hand.png'), ('action', 'go'), ('stimText', '"goodbye"'), ('stimAudio', 'audios/goodbye.wav'), ('stimVideo', 'videos/goodbye_clip.mp4'), ('movement', 'wrist')])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
      Routine trials
      LoopInitiator pause loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = nPause
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        Routine paused
      LoopTerminator pause
      LoopInitiator halfTimeLoop loopType="TrialHandler"
        loopType = random
        nReps = repHalftime
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        Routine halfTime
      LoopTerminator halfTimeLoop
    LoopTerminator trialsLoop
  LoopTerminator blockLoop
  Routine goodbyeScreen
