PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp_cospeech_congruency
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent codeActionCUE
      Code Type = Auto->JS
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      Begin Experiment:
        from PIL import Image  # Python Imaging Library (included with PsychoPy)
      Begin Routine:
        # select green or red circle depending on Go/Nogo trial
        if action == "go":
            circle_color = 'green'
        elif action == 'nogo':
            circle_color = 'red'
        else:
            circle_color = 'black'

        ## select image dimension for instruction image

        # Load the image to get its size
        img = Image.open(instructionSymbol)
        width, height = img.size

        # Convert pixel dimensions to PsychoPy units (assuming your window uses 'pix')
        aspect = width / height

        # Set the image size dynamically
        # E.g., fix the height and adjust width to preserve aspect ratio:
        fixed_height = 0.4
        thisExp.addData('image_aspect', aspect)
        sizeImage = [fixed_height * aspect, fixed_height]


        # check for keypress pause
        keys = event.getKeys(keyList=['p'])

        # if p was pressed, set a flag to run the routine
        run_routine = 'p' in keys
        print(run_routine)

        if run_routine:
            nPause = 1
        else:
            nPause = 0

        # increase trialNumber
        trialN += 1
        print(trialN)

        if trialN == nOneThird:
            repOneThird = 1
        elif trialN == nTwoThirds:
            repTwoThirds = 1
    PolygonComponent iti
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
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    TextComponent textStart
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 2.0
      stopVal [time (s)] = 3
      text = START
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    MovieComponent movieGesture
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stimVideo
      size = $sizeVideo
      startVal [time (s)] = 3.0
      stopVal [time (s)] = 6
      stopWithRoutine = False
      units = pix
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    SoundComponent audioStimuli
      forceEndRoutine = False
      sound [set every repeat] = $stimAudio
      startVal [time (s)] = 3.5
      stopVal [time (s)] = 6
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    ImageComponent instructionImage
      image [set every repeat] = $instructionSymbol
      size [set every repeat] = sizeImage
      startVal [time (s)] = 6.0
      stopVal [time (s)] = 8.5
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    PolygonComponent actionCue
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 8.5
      stopVal [time (s)] = 12
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    SoundComponent audioGoCue
      forceEndRoutine = False
      sound [set every repeat] = audios/race-start-beeps-125125.mp3
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 1.0
      volume = 0.8
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  Routine blockStart
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    CodeComponent codeStimuliLoad
      Code Type = Auto->JS
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      Begin Routine:
        #choose new,random subset of nogo trials
        subset_nogo_trials = nogo_trials.sample(n=5).reset_index(drop=True)  # select 5 random rows

        # new all_trials array for the next block
        all_trials = pd.concat([go_trials_rep, subset_nogo_trials], ignore_index = True)

        # re-shuffle at the beginning of each block
        all_trials = all_trials.sample(frac=1).reset_index(drop=True)

        # temporary csv for this block
        #all_trials.to_csv('block_trials.csv', index = False)
        nBlock += 1
        all_trials.to_csv(f"blocks/block_trials{nBlock}.csv", index = False)
        all_trials.to_csv("current_block_trials.csv", index = False)

        # set trial number to 0
        trialN = 0
        nOneThird = 26
        nTwoThirds = 52
        repOneThird = 0
        repTwoThirds = 0
    TextComponent textBlockStart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the start of a new block.

        Please press SPACEBAR to start.
    KeyboardComponent keyBlockResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcomeScreen
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    CodeComponent codeBeginning
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event
        import pandas as pd
        import numpy as np
        import random
        from PIL import Image  # Python Imaging Library (included with PsychoPy)

        # Try to open a small non-fullscreen window for the experimenter
        #try:
        #    expWin = visual.Window(
        #        size=(400, 200),
        #        screen=2,          # 0 = primary display (change if needed)
        #        fullscr=False,
        #        color='grey',
        #        units='pix'
        #    )
        #    expWinOK = True
        #except Exception as e:
         #   print(f"⚠️ Could not open experimenter window: {e}")
          #  expWinOK = False

        ## specifiy current Block number
        nBlock = 0

        ## load stimuli
        # load go trials
        go_trials = pd.read_excel('stimuli_go_congruency.xlsx')

        # repeat go trials 3 times
        go_trials_rep = pd.concat([go_trials]*3, ignore_index = True)

        # load nogo trials
        nogo_trials = pd.read_excel('stimuli_nogo_congruency.xlsx')
        subset_nogo_trials = nogo_trials.sample(n=5).reset_index(drop=True)  # select 5 random rows

        # Combine Go and NoGo trials
        all_trials = pd.concat([go_trials_rep, subset_nogo_trials], ignore_index = True)

        # shuffle
        all_trials = all_trials.sample(frac=1).reset_index(drop=True)

        # temporary csv
        all_trials.to_csv('block_trials.csv', index = False)


        # choose subset from go-trials for training block
        # we want to show each gesture once during training, choose instruciton type randomly

        # choose subset in go_trials
        samples = []
        for i in range(0, len(go_trials), 3):
            block = go_trials.iloc[i:i+3]  # block of 3 rows of excel
            if len(block) > 0:
                chosen = block.sample(n=2)  # random instruction
                samples.append(chosen)

        # 16 Samples
        samples = pd.concat(samples).head(16)
        nogo_samples = nogo_trials.sample(n=2).reset_index(drop=True)
        trainingTrials = pd.concat([samples, nogo_samples], ignore_index = True)
        trainingTrials = trainingTrials.sample(frac=1).reset_index(drop=True)
        trainingTrials.to_csv('trainingTrials.csv', index = False)

        # adjust video size to screen window size
        screen_width = win.size[0]
        screen_height = win.size[1]

        print("Screen window size: ", screen_width, screen_height)

        video_width = int(screen_height * 0.8 * (16/9))
        video_height = int(screen_height * 0.8)
        sizeVideo = [video_width, video_height]
    TextComponent textWelcome
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        If you want to continue to the explanation of this task, please press SPACEBAR.
    KeyboardComponent keyWelcomeResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine explanationScreen
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    TextComponent textExplanation
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, each trial will begin with a word played over the speakers, accompanied by a video showing a gesture on the screen in front of you.

        After this, you'll be asked to do one of the following - repeat the word, perform the gesture, or do both at the same time — depending on the trial.

        You'll know when to respond by a GO cue, which will appear as a green circle. If instead a red circle appears, it's a No-Go trial - in that case, simply relax and do nothing. Please attempt to perform the gesture with only your right hand to the best of your abilities. Even if you cannot physically produce the gesture, please give it your best try.

        Note: The word you hear and the gesture you see on the screen may not always match.

        Press SPACEBAR to continue.
    KeyboardComponent keyEplanation
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbyeScreen
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    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        This is the end of the task.

        If you could take a few more minutes to give us feedback on this gesture - speech task, we would greatly appreciate it.

        Thank you for your time!
  Routine explInstructSpeak
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    ImageComponent image
      image = images/speak.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent textInstructSpeak
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = The shown symbol is the image you will see when you are asked to repeat the word. 
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    KeyboardComponent keyInstructSpeak_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textInstructSpeak_continue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue.
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  Routine explInstructHand
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    TextComponent textInstructHand
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = The shown symbol is the image you will see when you are asked to repeat the gesture. 
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    ImageComponent imageInstructHand
      image = images/hand.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyInstructHand
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textInstructHand_continue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue.
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  Routine explInstructBoth
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Load the image to get its size
        img = Image.open('/Users/sara-sofiagorriz/Library/CloudStorage/OneDrive-Chalmers/Experiments/CoSpeech_congruency/images/speak_gesture1.png')
        width, height = img.size

        # Convert pixel dimensions to PsychoPy units (assuming your window uses 'pix')
        aspect = width / height

        # Set the image size dynamically
        # E.g., fix the height and adjust width to preserve aspect ratio:
        fixed_height = 0.4
        sizeImageDemo = [fixed_height * aspect, fixed_height]
    ImageComponent imageInstructBoth
      image = images/speak_gesture1.png
      size [set every repeat] = sizeImageDemo
      startVal [time (s)] = 0.0
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    TextComponent textInstructBoth
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = The shown symbol is the image you will see when you are asked to repeat the word and the gesture simultaneously. 
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    KeyboardComponent keyResponseInstructBoth
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textInstructBoth_continue
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue.
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  Routine blockTraining
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    TextComponent textBlockTraining
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the beginning of the training. If you want to start, please press SPACEBAR.
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    KeyboardComponent keyBlockResponseTraining
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine paused
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    CodeComponent codePause
      Code Type = Auto->JS
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      Begin Routine:
        keys = event.getKeys(keyList = ['p'])

        if 'p' in keys:
            event.clearEvents() # clear pressed key 'p'
    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Experiment is paused.

        To continue the experiment, press 'SPACEBAR'.
    KeyboardComponent keyRespPause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialTraining
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    CodeComponent codeTraining
      Code Type = Auto->JS
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      Begin Routine:
        # select green or red circle depending on Go/Nogo trial
        if action == "go":
            circle_color = 'green'
        elif action == 'nogo':
            circle_color = 'red'
        else:
            circle_color = 'black'

        ## select image dimension for instruction image

        # Load the image to get its size
        img = Image.open(instructionSymbol)
        width, height = img.size

        # Convert pixel dimensions to PsychoPy units (assuming your window uses 'pix')
        aspect = width / height

        # Set the image size dynamically
        # E.g., fix the height and adjust width to preserve aspect ratio:
        fixed_height = 0.4
        thisExp.addData('image_aspect', aspect)
        sizeImage = [fixed_height * aspect, fixed_height]
    PolygonComponent iti_Training
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
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    TextComponent textStart_Training
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 2.0
      stopVal [time (s)] = 3
      text = START
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    MovieComponent movieGesture_Training
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stimVideo
      size = $sizeVideo
      startVal [time (s)] = 3.0
      stopVal [time (s)] = 6
      stopWithRoutine = False
      units = pix
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    SoundComponent audioStim_Training
      forceEndRoutine = False
      sound [set every repeat] = $stimAudio
      startVal [time (s)] = 3.5
      stopVal [time (s)] = 6
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    ImageComponent instructionImage_Training
      image [set every repeat] = $instructionSymbol
      size [set every repeat] = sizeImage
      startVal [time (s)] = 6.0
      stopVal [time (s)] = 8.5
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    PolygonComponent actionCue_Training
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 8.5
      stopVal [time (s)] = 12
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    SoundComponent audioGoCue_Training
      forceEndRoutine = False
      sound [set every repeat] = audios/race-start-beeps-125125.mp3
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 1.0
      volume = 0.8
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  Routine breakTwothirds
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    CodeComponent codeTwoThrid
      Code Type = Auto->JS
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      Begin Experiment:
        repTwothirds = 0;
    TextComponent textTwothirds
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        You are two thrids throug this block.

        We will continue in 15 seconds
  Routine breakOnethird
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    CodeComponent codeOnethird
      Code Type = Auto->JS
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      Begin Routine:
        # reset to default
        repOnethird = 0
    TextComponent textOneThird
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        You are already one third through this block!

        We will continue in 15 seconds...
Flow
  Routine welcomeScreen
  Routine explanationScreen
  Routine explInstructSpeak
  Routine explInstructHand
  Routine explInstructBoth
  LoopInitiator trialsTraining loopType="TrialHandler"
    conditionsFile = trainingTrials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"you"'), ('stimVideo', 'videos/me_clip.mp4'), ('stimAudio', 'audios/you.wav'), ('movement', 'hand_wrist'), ('congruency', 'incongruent')]),
      OrderedDict([('instructionType', 'speech_gesture'), ('instructionSymbol', 'images/speak_gesture1.png'), ('action', 'go'), ('stimText', '"rising"'), ('stimVideo', 'videos/rising_clip.mp4'), ('stimAudio', 'audios/rising.wav'), ('movement', 'arm'), ('congruency', 'congruent')]),
      OrderedDict([('instructionType', 'speech_gesture'), ('instructionSymbol', 'images/speak_gesture1.png'), ('action', 'go'), ('stimText', '"me"'), ('stimVideo', 'videos/me_clip.mp4'), ('stimAudio', 'audios/me.wav'), ('movement', 'hand_wrist'), ('congruency', 'congruent')]),
      OrderedDict([('instructionType', 'speech_gesture'), ('instructionSymbol', 'images/speak_gesture1.png'), ('action', 'go'), ('stimText', '"you"'), ('stimVideo', 'videos/you_clip.mp4'), ('stimAudio', 'audios/you.wav'), ('movement', 'hand_wrist'), ('congruency', 'congruent')]),
      OrderedDict([('instructionType', 'speech_gesture'), ('instructionSymbol', 'images/speak_gesture1.png'), ('action', 'go'), ('stimText', '"rising"'), ('stimVideo', 'videos/falling_clip.mp4'), ('stimAudio', 'audios/rising.wav'), ('movement', 'arm'), ('congruency', 'incongruent')])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
    Routine blockTraining
    Routine trialTraining
  LoopTerminator trialsTraining
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine blockStart
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = current_block_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"rising"'), ('stimVideo', 'videos/falling_clip.mp4'), ('stimAudio', 'audios/rising.wav'), ('movement', 'arm'), ('congruency', 'incongruent')]),
        OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"me"'), ('stimVideo', 'videos/you_clip.mp4'), ('stimAudio', 'audios/me.wav'), ('movement', 'hand_wrist'), ('congruency', 'incongruent')]),
        OrderedDict([('instructionType', 'speech'), ('instructionSymbol', 'images/speak.png'), ('action', 'go'), ('stimText', '"falling"'), ('stimVideo', 'videos/falling_clip.mp4'), ('stimAudio', 'audios/falling.wav'), ('movement', 'arm'), ('congruency', 'congruent')]),
        OrderedDict([('instructionType', 'gesture'), ('instructionSymbol', 'images/hand.png'), ('action', 'go'), ('stimText', '"falling"'), ('stimVideo', 'videos/falling_clip.mp4'), ('stimAudio', 'audios/falling.wav'), ('movement', 'arm'), ('congruency', 'congruent')]),
        OrderedDict([('instructionType', 'speech_gesture'), ('instructionSymbol', 'images/speak_gesture1.png'), ('action', 'go'), ('stimText', '"rising"'), ('stimVideo', 'videos/falling_clip.mp4'), ('stimAudio', 'audios/rising.wav'), ('movement', 'arm'), ('congruency', 'incongruent')])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
      Routine trial
      LoopInitiator pause loopType="TrialHandler"
        loopType = random
        nReps = nPause
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        Routine paused
      LoopTerminator pause
      LoopInitiator oneThirdLoop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = repOneThird
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        Routine breakOnethird
      LoopTerminator oneThirdLoop
      LoopInitiator twoThirdsLoop loopType="TrialHandler"
        loopType = random
        nReps = repTwoThirds
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        Routine breakTwothirds
      LoopTerminator twoThirdsLoop
    LoopTerminator trialsLoop
  LoopTerminator blockLoop
  Routine goodbyeScreen
